#=====================================================
# phantom
#=====================================================

# Main cylindrical phantom (outer volume)
# Creates a large air cylinder to represent the phantom space
# Cylinder 
/gate/world/daughters/name               phantom
/gate/world/daughters/insert             cylinder
/gate/phantom/placement/setTranslation   0.0 0.0 0.0 cm   # Centered at world origin
/gate/phantom/geometry/setRmax           103 mm           # Outer radius of the cylinder
/gate/phantom/geometry/setRmin           0.0 cm           # Solid (no inner hole)
/gate/phantom/geometry/setHeight         71 cm            # Height of the cylinder
/gate/phantom/setMaterial                G4_AIR           # Material: air
/gate/phantom/vis/forceWireframe
/gate/phantom/vis/setColor               gray
/gate/phantom/vis/setVisible             1

# Inner scattering cylinder
# Represents a polyethylene volume inside the phantom
# Cylinder 
/gate/phantom/daughters/name                cylinderScat
/gate/phantom/daughters/insert              cylinder
/gate/cylinderScat/placement/setTranslation 0.0 0.0 0.0 cm
/gate/cylinderScat/geometry/setRmax         102 mm         # Slightly smaller radius than phantom
/gate/cylinderScat/geometry/setRmin         0.0 cm
/gate/cylinderScat/geometry/setHeight       70 cm
/gate/cylinderScat/setMaterial              G4_POLYETHYLENE   # Material: polyethylene
/gate/cylinderScat/vis/forceWireframe
/gate/cylinderScat/vis/setColor             gray
/gate/cylinderScat/vis/setVisible           1

# Linear Source interior
# A thin water cylinder placed inside the scattering cylinder
/gate/cylinderScat/daughters/name               linearSourceIn
/gate/cylinderScat/daughters/insert             cylinder
/gate/linearSourceIn/placement/setTranslation   0.0 -4.5 0.0 cm    # Shifted slightly in Y direction
/gate/linearSourceIn/geometry/setRmin           0.0 mm
/gate/linearSourceIn/geometry/setRmax           1.6 mm
/gate/linearSourceIn/geometry/setHeight         70 cm
/gate/linearSourceIn/setMaterial                G4_WATER           # Material: water
/gate/linearSourceIn/vis/forceWireframe
/gate/linearSourceIn/vis/setColor               red
/gate/linearSourceIn/vis/setVisible             1

# Linear Source (Outer layer)
# A thin polyethylene layer surrounding the inner water core
/gate/cylinderScat/daughters/name               linearSourceOut
/gate/cylinderScat/daughters/insert             cylinder
/gate/linearSourceOut/placement/setTranslation  0.0 -4.5 0.0 cm
/gate/linearSourceOut/geometry/setRmin          1.6 mm
/gate/linearSourceOut/geometry/setRmax          2.5 mm
/gate/linearSourceOut/geometry/setHeight        70 cm
/gate/linearSourceOut/setMaterial               G4_POLYETHYLENE   # Material: polyethylene
/gate/linearSourceOut/vis/forceWireframe
/gate/linearSourceOut/vis/setColor              red
/gate/linearSourceOut/vis/setVisible            0












