#=====================================================
# DIGITIZER CHAIN
#=====================================================

#ADDER
/gate/digitizer/Singles/insert                        			adder

#READOUT
/gate/digitizer/Singles/insert                        			readout
/gate/digitizer/Singles/readout/setDepth              			1


#NOISE
/gate/distributions/name 						energy_distrib
/gate/distributions/insert						Gaussian
/gate/distributions/energy_distrib/setMean 				500 keV 
/gate/distributions/energy_distrib/setSigma 				1 keV


/gate/distributions/name 						dt_distrib
/gate/distributions/insert 						Exponential
/gate/distributions/dt_distrib/setLambda				2.17 us 			

/gate/digitizer/Singles/insert                        			noise
/gate/digitizer/Singles/noise/setDeltaTDistribution 			dt_distrib
/gate/digitizer/Singles/noise/setEnergyDistribution 			energy_distrib

#ENERGY BLURRING

/gate/digitizer/Singles/insert                        			blurring
/gate/digitizer/Singles/blurring/setResolution			      	0.112
/gate/digitizer/Singles/blurring/setEnergyOfReference 			511 keV

/gate/digitizer/Singles/insert 						crystalblurring 
/gate/digitizer/Singles/crystalblurring/setCrystalResolutionMin 	0.112 
/gate/digitizer/Singles/crystalblurring/setCrystalResolutionMax 	0.112 
/gate/digitizer/Singles/crystalblurring/setCrystalQE 			0.865
/gate/digitizer/Singles/crystalblurring/setCrystalEnergyOfReference 	511 keV  
	


#TEMPORAL RESOLUTION
/gate/digitizer/Singles/insert 						timeResolution
/gate/digitizer/Singles/timeResolution/setTimeResolution		0.220 ns
/gate/digitizer/Singles/timeResolution/verbose				0

#PILE-UP
/gate/digitizer/Singles/insert 						pileup
/gate/digitizer/Singles/pileup/setDepth 				1
/gate/digitizer/Singles/pileup/setPileup 				5.9 ns

#DEADTIME

/gate/digitizer/Singles/insert 						deadtime
/gate/digitizer/Singles/deadtime/setDeadTime 				5.9 ns
/gate/digitizer/Singles/deadtime/setMode 				paralysable
/gate/digitizer/Singles/deadtime/chooseDTVolume 			module


#ENERGY WINDOW
/gate/digitizer/Singles/insert                        			thresholder
/gate/digitizer/Singles/thresholder/setThreshold      			449.68 keV
/gate/digitizer/Singles/insert                        			upholder
/gate/digitizer/Singles/upholder/setUphold            			613.20 keV

#PROMPT

/gate/digitizer/Coincidences/setInputName       			Singles
/gate/digitizer/Coincidences/setWindow     				2.0115 ns
/gate/digitizer/Coincidences/minSectorDifference 			5
/gate/digitizer/Coincidences/MultiplesPolicy    			takeAllGoods

/gate/digitizer/Coincidences/allPulseOpenCoincGate 			true


#DELAY
/gate/digitizer/name                            			delay
/gate/digitizer/insert                          			coincidenceSorter
/gate/digitizer/delay/setInputName       				Singles
/gate/digitizer/delay/setWindow   					2.0115 ns
/gate/digitizer/delay/setOffset                 			100.0 ns
/gate/digitizer/delay/minSectorDifference 				5
/gate/digitizer/delay/MultiplesPolicy           			takeAllGoods

/gate/digitizer/delay/allPulseOpenCoincGate 				true



